# Generated by OpenSesame 2.9.0~pre29 (Hesitant Heisenberg)
# Tue Oct 21 09:10:21 2014 (nt)
# <http://www.cogsci.nl/opensesame>

set mouse_backend "xpyriment"
set subject_parity "even"
set height "768"
set font_italic "no"
set canvas_backend "xpyriment"
set synth_backend "legacy"
set start "experiment"
set title "PyGaze eye-tracking template"
set coordinates "relative"
set width "1024"
set sampler_backend "legacy"

set foreground "white"
set font_bold "no"
set description "A template for eye-tracking experiments"
set background "black"
set font_size "18"
set keyboard_backend "legacy"
set font_family "mono"
set compensation "0"
set bidi "no"
set subject_nr "0"

define notepad about_this_template
	__note__
	Hi,
	
	This template already contains the basic structure needed for a typical
	eye-tracking experiment, consisting of a practice phase, followed by an
	experimental phase.
	
	For more information, please refer to the website:
	<http://www.cogsci.nl/opensesame>
	
	Have fun with OpenSesame!
	
	--
	
	Sebastiaan
	__end__
	set description "Some pointers to help you gest started!"

define loop block_loop
	set repeat "1"
	set description "A single block of trials"
	set item "trial_sequence"
	set column_order ""
	set cycles "1"
	set order "random"
	run trial_sequence

define sequence block_sequence
	set flush_keyboard "yes"
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run reset_feedback "always"
	run block_loop "always"
	run feedback "always"

define sketchpad end_of_experiment
	set duration "keypress"
	set description "A sketchpad notifying the participant that the experiment is finished"
	set start_response_interval "no"
	draw textline 0 0 "Press any key to exit" center=1 color="white" font_family="mono" font_size=18 font_bold="no" font_italic="no" html="yes" z_index=0 show_if="always"

define sketchpad end_of_practice
	set duration "keypress"
	set description "A sketchpad notifying the participant that the practice phase is finished"
	set start_response_interval "no"
	draw textline 0 0 "Press any key to continue" center=1 color="white" font_family="mono" font_size=18 font_bold="no" font_italic="no" html="yes" z_index=0 show_if="always"

define sequence experiment
	set flush_keyboard "yes"
	set description "The main sequence of the experiment"
	run about_this_template "always"
	run pygaze_init "always"
	run instructions "always"
	run practice_loop "always"
	run end_of_practice "always"
	run experimental_loop "always"
	run end_of_experiment "always"

define loop experimental_loop
	set repeat "1"
	set description "A loop containing one or more experimental blocks"
	set item "block_sequence"
	set column_order "practice"
	set cycles "1"
	set order "random"
	setcycle 0 practice "no"
	run block_sequence

define feedback feedback
	set duration "keypress"
	set reset_variables "yes"
	set description "Provides feedback to the participant"
	draw textline 0 -96 "Your average response time was [avg_rt]ms" center=1 color="white" font_family="mono" font_size=18 font_bold="no" font_italic="no" html="yes" z_index=0 show_if="always"
	draw textline 0 32 "Press any key to continue" center=1 color="white" font_family="mono" font_size=18 font_bold="no" font_italic="no" html="yes" z_index=0 show_if="always"
	draw textline 0 -32 "Your accuracy was [acc]%" center=1 color="white" font_family="mono" font_size=18 font_bold="no" font_italic="no" html="yes" z_index=0 show_if="always"

define sketchpad instructions
	set duration "keypress"
	set start_response_interval "no"
	set description "A sketchpad containing the instructions for the participant"
	draw textline 0 0 "Press any key to begin!" center=1 color="white" font_family="mono" font_size=18 font_bold="no" font_italic="no" html="yes" z_index=0 show_if="always"

define keyboard_response keyboard_response
	set description "Collects keyboard responses"
	set timeout "infinite"
	set flush "yes"

define logger logger
	set description "Logs experimental data"

define loop practice_loop
	set repeat "1"
	set description "A loop containing one or more practice blocks"
	set item "block_sequence"
	set column_order "practice"
	set cycles "1"
	set order "random"
	setcycle 0 practice "yes"
	run block_sequence

define pygaze_drift_correct pygaze_drift_correct
	set xpos "0"
	set draw_target "yes"
	set ypos "0"
	set target_style "small-cross"
	set target_color "[foreground]"
	set fixation_triggered "no"

define pygaze_init pygaze_init
	set sacc_vel_thr "35"
	set sacc_acc_thr "9500"
	set _logfile "automatic"
	set calibrate "yes"
	set tracker_type "Simple dummy"

define pygaze_log pygaze_log
	set msg ""
	set throttle "2"
	set auto_log "yes"

define pygaze_start_recording pygaze_start_recording
	set status_msg "start_trial [count_trial_sequence]"

define pygaze_stop_recording pygaze_stop_recording

define reset_feedback reset_feedback

define sketchpad sketchpad
	set duration "0"
	set description "Displays stimuli"
	set start_response_interval "no"
	draw fixdot 0 0 color="white" style="default" z_index=0 show_if="always"

define sequence trial_sequence
	set flush_keyboard "yes"
	set description "A single trial"
	run pygaze_drift_correct "always"
	run pygaze_start_recording "always"
	run sketchpad "always"
	run keyboard_response "always"
	run logger "always"
	run pygaze_log "always"
	run pygaze_stop_recording "always"

